PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'runs': '20'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1710, 1107]
  expName = ABA_pilot
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine Instructions
    RoutineSettingsComponent Instructions
      disabled = True
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    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Hold the space button down if you're hearing two streams and release when you're hearing one.

        You will complete 40 runs, you can rest between runs.

        When you are ready, press space to start.
    KeyboardComponent inst_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Setup
    RoutineSettingsComponent Setup
      disabled = True
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    TextComponent setup_wait_message
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please wait for set up to finish.

        You will be taken to the experiment automatically.

        Thank you!
        CoNCH Lab
    KeyboardComponent setup_key_resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Break
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    TextComponent break_message
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Take a break!

        Press space for the next run.
    KeyboardComponent break_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trial
    RoutineSettingsComponent Trial
      stopVal [duration (s)] = 8
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    PolygonComponent trial_fixation_cross
      fillColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    SoundComponent trial_ABA_sequence
      sound [set every repeat] = $stimuli
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
      volume = 0.5
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    KeyboardComponent trial_key_resp
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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    CodeComponent trial_multiple_keypress
      Code Type = Py
      Begin Experiment:
        # Begin Experiment tab
        response_times = []
        press_durations = []
      Begin Routine:
        # Begin Routine tab
        trial_clock = core.Clock()
        trial_clock.reset()

        press_start_time = None
        press_end_time = None

        response_times = []  # Reset for each trial
        press_durations = []  # Reset for each trial
      Each Frame:
        # Each Frame tab
        keys = event.getKeys(timeStamped=trial_clock)
        for key, timestamp in keys:
            if key == 'space':
                if press_start_time is None:
                    press_start_time = timestamp
                    response_times.append(timestamp)
                else:
                    press_end_time = timestamp
                    duration = press_end_time - press_start_time
                    press_durations.append(duration)
                    press_start_time = None  # Reset for the next press
      End Routine:
        # End Routine tab
        thisExp.addData('response_times', response_times)
        thisExp.addData('press_durations', press_durations)
    CodeComponent trial_send_trigger
      Code Type = Py
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      Before Experiment:
        import pyxid2
        import time

        #generate a list of connected xid devices
        devices = pyxid2.get_xid_devices()

        #assign the first device in the list as 'dev'
        #NB if multiple devices are connected (e.g., stimtracker & cedrus response box, this value may need to be changed)
        dev=devices[0]
      Begin Routine:
        #set the pule duration in ms
        dev.set_pulse_duration(15)

        #raise lines in the stimtracker to output unique triggers provided as integer values in the trial spreadsheet under the column 'trig'
        dev.activate_line(bitmask=level)

        #alternatively you can raise specific lines in the stimtracker by providing integer values (1:8 or 1:16 depending on hardware) or an array or values (e.g., [1,2,8]) in the trial spreadsheet under the column 'lines')
        #dev.activate_line(lines=trig)

        #lines can also be raised conditionally & in combination as in example below:
        #if condition=='audio_trial':
        #    dev.activate_line(lines=[1])
        #if condition=='video_trial':
        #    dev.activate_line(lines=[2])
        #if condition=='audiovisual_trial':
        #    dev.activate_line(lines=[1,2])
Flow
  Routine Setup
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('level', 1), ('df_st', 0), ('A_freq_Hz', 400), ('B_freq_Hz', 400.0), ('stimuli', '../stimuli/ABA_level_1_df_0st_B_400.0Hz_A_400Hz.wav')]),
      OrderedDict([('level', 2), ('df_st', 2), ('A_freq_Hz', 400), ('B_freq_Hz', 449.0), ('stimuli', '../stimuli/ABA_level_2_df_2st_B_449.0Hz_A_400Hz.wav')]),
      OrderedDict([('level', 3), ('df_st', 4), ('A_freq_Hz', 400), ('B_freq_Hz', 504.0), ('stimuli', '../stimuli/ABA_level_3_df_4st_B_504.0Hz_A_400Hz.wav')]),
      OrderedDict([('level', 4), ('df_st', 6), ('A_freq_Hz', 400), ('B_freq_Hz', 565.7), ('stimuli', '../stimuli/ABA_level_4_df_6st_B_565.7Hz_A_400Hz.wav')]),
      OrderedDict([('level', 5), ('df_st', 8), ('A_freq_Hz', 400), ('B_freq_Hz', 635.0), ('stimuli', '../stimuli/ABA_level_5_df_8st_B_635.0Hz_A_400Hz.wav')])]
    Routine Trial
  LoopTerminator trials
  Routine Break
